begin model

begin compartments
    CP 3 1  # 3D compartment with volume = 1
    PM 2 CP 1  # 2D surface compartment on CP with area = 1
end compartments

begin parameters
# Define initial number of molecules released
  A_i 150
  B_i 150
  C_i 100
# Define reaction rates
  kon 1e-2
  koff 1e-3
  k_P 1e1
end parameters

begin molecule types
# Here we define the molecules and the possible states and binding sites they can have
# Molecule A has a binding site (a), and a phosphorylation site which can be unphosphorylated (~0) or phosphorylated (~P):
    A(a,T286~0~P,c)
# Molecule B has a binding site (b):
    B(b)
# Molecule C has no binding sites:
    C(a)
end molecule types

begin species
# Molecule A starts with binding site a free, and with phosphorylation site unphosphorylated
    @CP:A(a,T286~0,c) A_i 
# Molecule B starts with binding site b free
    @PM:B(b) B_i 
# Molecule C has no binding sites so it starts as it is
    @CP:C(a) C_i 
end species

begin reaction rules
# A_free and B_free can resversbly bind to give AB_complex
# Don't need to specify, if I'm not interested, status of phosphorylation for molecule A. Note how it is not written in the rule definition (don't care, don't write):
    A(a) + B(b) <-> A(a!1).B(b!1) kon, koff
# If A is unphosphorylated, it can become phoshorylated by the presence of C
# Don't need to specify status of binding site 'a' (don't care, don't write):
    A(T286~0) + C(a) -> A(T286~P) k_P

    A(c,T286~P) + C(a) -> A(c!1,T286~P).C(a!1) k_P

end reaction rules

begin observables
  Molecules AB_complex A(a!1).B(b!1)
  Molecules A_phosphorylated A(T286~P)
  Molecules A_B_C A(a!1,c!2).B(b!1).C(a!2)
  Molecules A A(a)
  Molecules B B(b)
  Molecules C C()
end observables

end model
simulate({method=>"ssa",t_end=>100,n_steps=>10})








